PsychoPy2experiment version="2021.2.0"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1366, 768]
  color = white
  expName = flankerText
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Routines
  Routine thanks
    TextComponent thanksText
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text =  Thank you :)
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  Routine feedback
    CodeComponent checkCorrect
      Code Type = Auto->JS
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      Begin Routine:
        tmp = event.getKeys()
        mykey = mykey+tmp[1:]
        #__________________________________________
        if corrAns=='w':
            msg='lottery ticket was « white »'
        else:
            msg='lottery ticket was « black »'
        #__________________________________________
        if mykey[0]=='left':
            msg = 'Congrass\n\n'+msg+'\n&' if mykey[1]==corrAns else 'Opps...!\n\n'+msg+'\nbut'
            msg=msg+' you select red adviser\n←'
        else:
            msg = 'Congrass\n\n'+msg+'\n&' if mykey[3]==corrAns else 'Opps...!\n\n'+msg+'\nbut'
            msg=msg+' you select blue adviser\n→'
        #__________________________________________
        mykey[2] = '100' if mykey[2]=='space' else mykey[2][-1]+'0'

        if mykey[1]=='w':
            red='advise white ticket \n by '+mykey[2]+'% of confidence'
        else:
            red='advise black ticket \n by '+mykey[2]+'% of confidence'
        #__________________________________________
        mykey[4] = '100' if mykey[4]=='space' else mykey[4][-1]+'0'

        if mykey[3]=='w':
            blue='advise white ticket \n by '+mykey[4]+'% of confidence'
        else:
            blue='advise black ticket \n by '+mykey[4]+'% of confidence'
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent msg_c
      color = black
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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    ImageComponent image_c
      image = img\client.png
      pos = (0, .5)
      saveStartStop = False
      size = (0.25, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent client_turn
      color = black
      letterHeight = 0.1
      pos = (0, .8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = client's turn  (trial's result)
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    ImageComponent image_r
      image = img\red.png
      pos = (-.75, .25)
      saveStartStop = False
      size = (0.25, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent image_b
      image = img\blue.png
      pos = (.75, .25)
      saveStartStop = False
      size = (0.25, 0.4)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_2
      color = black
      letterHeight = 0.1
      pos = (0, -.75)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = (press "space" key to next trial)
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    TextComponent msg_r
      color = black
      letterHeight = 0.05
      pos = [-.75, 0]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $red
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    TextComponent msg_b
      color = black
      letterHeight = 0.05
      pos = [.75, 0]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $blue
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  Routine client_turn_begin
    TextComponent instrText
      color = black
      letterHeight = 0.1
      pos = [0, .75]
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        client's turn.

        (you've 5 sec to choose your adviser)
    KeyboardComponent instrEnd
      allowedKeys = "space"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent image_7
      image = img\client.png
      saveStartStop = False
      size = (0.25, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent text_5
      color = black
      letterHeight = 0.1
      pos = (0, -.75)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = press "space" key to start when you was ready
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  Routine suggestion
    TextComponent text_8
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.5
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      text [set every repeat]:
        What is your suggested color?

        ( "w" : white  ,  "b" : black )
    KeyboardComponent resp_2
      allowedKeys [set every repeat] = "w","b"
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
      store = all keys
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  Routine grid
    TextComponent advicer_turn
      color = black
      letterHeight = 0.2
      pos = (0, .5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.4
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      text [set every repeat]:
        Evidence grid
    ImageComponent show_image_to_advicer
      image [set every repeat] = $url
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.4
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  Routine adviser_r
    CodeComponent checkCorrect_3
      Code Type = Auto->JS
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      Begin Routine:
        mykey = event.getKeys()
        mykey = mykey[len(mykey)-1:]
        if mykey[0] == 'left':
            msg = "you selected you to advice"
        else:
            msg = "you doesn't select"
    TextComponent massage
      color = black
      letterHeight = 0.1
      pos = [0,0.75] 
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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    TextComponent text_10
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        you've :
        (1.4 sec to see Evidence grid)
        (4.5 sec to suggest lottery color)
        (4.5 sec to give your confidence)
    KeyboardComponent key_resp_4
      allowedKeys = "space"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent image_12
      image = img\red.png
      pos = (-.75, 0)
      saveStartStop = False
      size = (0.25, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent text_11
      color = black
      letterHeight = 0.1
      pos = (0, -.75)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = press "space" key to start when you was ready
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    TextComponent text_15
      letterHeight = 0.1
      pos = (-.75, .5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = red adviser's turn
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  Routine adviser_b
    CodeComponent checkCorrect_4
      Code Type = Auto->JS
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      Begin Routine:
        mykey = mykey+event.getKeys()[1:]

        if mykey[0] == 'right':
            msg = "you selected you to advice"
        else:
            msg = "you doesn't select"
    TextComponent massage_2
      color = black
      letterHeight = 0.1
      pos = [0, .75]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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    TextComponent text_12
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        you've :
        (1.4 sec to see Evidence grid)
        (4.5 sec to suggest lottery color)
        (4.5 sec to give your confidence)
    KeyboardComponent key_resp_5
      allowedKeys = "space"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent image_13
      image = img\blue.png
      pos = (.75, 0)
      saveStartStop = False
      size = (0.25, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent text_13
      color = black
      letterHeight = 0.1
      pos = (0, -.75)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = press "space" key to start when you was ready
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    TextComponent text_16
      color = black
      letterHeight = 0.1
      pos = (.75, .5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = blue adviser's turn
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  Routine client
    TextComponent text
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text [set every repeat]:
        choose  one adviser :
        (← red , blue→)
    KeyboardComponent resp
      allowedKeys [set every repeat] = 'right','left'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 9.5
      store = all keys
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    ImageComponent image
      image = img\red.png
      pos = (-.75, 0)
      saveStartStop = False
      size = (0.25, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent image_2
      image = img\blue.png
      pos = (.75, 0)
      saveStartStop = False
      size = (0.25, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine conf
    TextComponent text_9
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.5
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      text [set every repeat]:
        What is confidence rate?

        (0 , 1 , 2 , 3 , 4 , 5 , 6 , 7 , 8 , 9 , space)
    KeyboardComponent resp_3
      allowedKeys [set every repeat] = "space",'9','8','7','6','5','4','3','2','1','0'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
      store = all keys
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    ImageComponent image_8
      image = img\conf.png
      pos = (0, -.75)
      size = (0.6, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.5
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  Routine inst1
    TextComponent instrText_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Zero sum game with 3 subject
        (1 client & 2 adviser)
    ImageComponent image_3
      image = img\client.png
      pos = (-.75, 0)
      saveStartStop = False
      size = (0.25, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent image_4
      image = img\blue.png
      pos = (.75, .25)
      saveStartStop = False
      size = (0.25, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent image_5
      image = img\red.png
      pos = (.75, -0.25)
      saveStartStop = False
      size = (0.25, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent text_3
      color = black
      letterHeight = 0.1
      pos = (0, -.75)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = (press "space" key to next)
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent title
      color = black
      letterHeight = 0.15
      pos = (0, .75)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Influence in advice giving
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    TextComponent details
      color = black
      letterHeight = 0.05
      pos = (0, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = experiment run in 20 trials
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    TextComponent warn
      color = red
      letterHeight = 0.05
      pos = (0, -.9)
      startVal [time (s)] = 0.0
      text = warning : don't use right side numbers on your keyboard
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  Routine inst2
    TextComponent instrText_3
      color = black
      letterHeight = 0.1
      pos = [0, .75]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = When it is the client's turn, client must choose one adviser In this way : 
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    ImageComponent image_6
      image = img\client.png
      pos = (-.75, 0)
      saveStartStop = False
      size = (0.25, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent text_L
      color = red
      letterHeight = 0.1
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        press "←" key to choose red adviser
    TextComponent text_or
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = or 
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    TextComponent text_r
      color = blue
      letterHeight = 0.1
      pos = (0, -.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = press  "→" key to choose blue adviser
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    TextComponent text_space
      color = black
      letterHeight = 0.1
      pos = (0, -.75)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = (press "space" key to next)
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine inst3
    TextComponent instrText_4
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        When it is the adviser's turn:
         the client must go out

        the advicers must individually :
        give adviced lottery color &
        the degree of confidence they have .
    ImageComponent image_10
      image = img\blue.png
      pos = (.75, .25)
      saveStartStop = False
      size = (0.25, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent image_11
      image = img\red.png
      pos = (.75, -0.25)
      saveStartStop = False
      size = (0.25, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent text_4
      color = black
      letterHeight = 0.1
      pos = (0, -.75)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = (press "space" key to next)
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine suggestion_2
    TextComponent text_14
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.5
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      text [set every repeat]:
        What is your suggested color?

        ( "w" : white  ,  "b" : black )
    KeyboardComponent resp_4
      allowedKeys [set every repeat] = 'w','b'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
      store = all keys
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  Routine conf_2
    TextComponent text_17
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.5
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      text [set every repeat]:
        What is confidence rate?

        (0 , 1 , 2 , 3 , 4 , 5 , 6 , 7 , 8 , 9 , space)
    KeyboardComponent resp_5
      allowedKeys [set every repeat] = "space",'9','8','7','6','5','4','3','2','1','0'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
      store = all keys
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    ImageComponent image_9
      image = img\conf.png
      pos = (0, -.75)
      size = (0.6, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.5
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Flow
  Routine inst1
  Routine inst2
  Routine inst3
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = grids.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'url': 'C:/Users/nili/Desktop/cog/images/0.png', 'p_black': 0.55, 'corrAns': 'w'},
      {'url': 'C:/Users/nili/Desktop/cog/images/1.png', 'p_black': 0.45, 'corrAns': 'w'},
      {'url': 'C:/Users/nili/Desktop/cog/images/2.png', 'p_black': 0.53, 'corrAns': 'b'},
      {'url': 'C:/Users/nili/Desktop/cog/images/3.png', 'p_black': 0.52, 'corrAns': 'b'},
      {'url': 'C:/Users/nili/Desktop/cog/images/4.png', 'p_black': 0.49, 'corrAns': 'b'},
      {'url': 'C:/Users/nili/Desktop/cog/images/5.png', 'p_black': 0.54, 'corrAns': 'w'},
      {'url': 'C:/Users/nili/Desktop/cog/images/6.png', 'p_black': 0.47, 'corrAns': 'b'},
      {'url': 'C:/Users/nili/Desktop/cog/images/7.png', 'p_black': 0.46, 'corrAns': 'w'},
      {'url': 'C:/Users/nili/Desktop/cog/images/8.png', 'p_black': 0.48, 'corrAns': 'b'},
      {'url': 'C:/Users/nili/Desktop/cog/images/9.png', 'p_black': 0.47, 'corrAns': 'w'},
      {'url': 'C:/Users/nili/Desktop/cog/images/10.png', 'p_black': 0.56, 'corrAns': 'b'},
      {'url': 'C:/Users/nili/Desktop/cog/images/11.png', 'p_black': 0.53, 'corrAns': 'b'},
      {'url': 'C:/Users/nili/Desktop/cog/images/12.png', 'p_black': 0.52, 'corrAns': 'w'},
      {'url': 'C:/Users/nili/Desktop/cog/images/13.png', 'p_black': 0.47, 'corrAns': 'w'},
      {'url': 'C:/Users/nili/Desktop/cog/images/14.png', 'p_black': 0.51, 'corrAns': 'w'},
      {'url': 'C:/Users/nili/Desktop/cog/images/15.png', 'p_black': 0.61, 'corrAns': 'w'},
      {'url': 'C:/Users/nili/Desktop/cog/images/16.png', 'p_black': 0.5, 'corrAns': 'b'},
      {'url': 'C:/Users/nili/Desktop/cog/images/17.png', 'p_black': 0.39, 'corrAns': 'b'}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
    Routine client_turn_begin
    Routine client
    Routine adviser_r
    Routine grid
    Routine suggestion
    Routine conf
    Routine adviser_b
    Routine grid
    Routine suggestion_2
    Routine conf_2
    Routine feedback
  LoopTerminator trials
  Routine thanks
